PsychoPy2experiment version="2024.2.2"
Settings
  Completed URL = https://surreyfahs.eu.qualtrics.com/jfe/form/SV_5p9sgJm3jv3P446
  Experiment info = {'family': '', 'participant': '', 'session': ''}
  Full-screen window = True
  Incomplete URL = https://surreyfahs.eu.qualtrics.com/jfe/form/SV_5p9sgJm3jv3P446
  Monitor = testMonitor
  Resources = ['ant_conds.csv', 'stim\\big_bubbles.png', 'stim\\blank.png', 'stim\\both.png', 'stim\\bubbles.png', 'stim\\center.png', 'stim\\centre.png', 'stim\\fix.png', 'stim\\introFish.png', 'stim\\lcon.png', 'stim\\lincon.png', 'stim\\lneut.png', 'stim\\lower.png', 'stim\\rcon.png', 'stim\\rincon.png', 'stim\\rneut.png', 'stim\\upper.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = aqua
  expName = ANT-C
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    ImageComponent cues
      image [set every repeat] = $cueFile
      startVal [time (s)] = 0
      stopVal [duration (s)] = .15
      units = pix
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    ImageComponent target_img
      image [set every repeat] = $targetFile
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.7
      units = pix
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    KeyboardComponent resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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    ImageComponent fixationshort
      image = stim/fix.png
      startVal [time (s)] = $fixStartTime
      stopVal [duration (s)] = 2.2
      units = pix
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    CodeComponent setTargetLoc
      Code Type = Auto->JS
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      Begin Experiment:
        targ_offset = 112
      Begin Routine:
        if targetLoc == 'upper':
            target_img.pos = (0, targ_offset)
        elif targetLoc == 'lower':
            target_img.pos = (0, 0-targ_offset)
    CodeComponent setFixStartTime
      Code Type = Auto->JS
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      Begin Experiment:
        fixStartTime = 0.0
      Begin Routine:
        if cue == 'center':
            fixStartTime = 0.15
        else: fixStartTime = 0.0
  Routine feedback
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    TextComponent fbk_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent fdbk_code
      Code Type = Both
      Begin Experiment:
        msg = ""
      Begin JS Experiment:
        var msg = ""
      Begin JS Routine:
        if ((resp.corr === 1)) {
            msg = "Correct!";
        } else {
            msg = "Wrong";
        }
        fbk_text.setText(msg);
      Begin Routine:
        if resp.corr == True:
            msg = 'Correct!'
        else:
            msg = 'Wrong'
        fbk_text.setText(msg)
  Routine PracInstruc
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    TextComponent pracText1
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The Fish Tank!







        SPACE  to continue.
    KeyboardComponent pracResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent logo
      image = stim/introFish.png
      size = [1,.8]
      startVal [time (s)] = 0.0
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    ImageComponent intro_bubbles
      image = stim/big_bubbles.png
      ori = 20
      pos = (.7, .1)
      startVal [time (s)] = 0.0
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  Routine MainInstruc
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    TextComponent mainInst
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Good practice!

        Now let's play the real game! This time we won't tell you if you were right or wrong. Try to be as quick and accurate as you can!

        There will be 3 rounds and you can choose to take a break after each one.

        Are you ready?
    KeyboardComponent instResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracInstruct2
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    TextComponent practInst2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this game you will see rows of fish like this:



        Press the arrow key ← or → that matches the direction of the MIDDLE fish!

        Look out for bubbles!

        They tell you where the fish might pop up next!

        Try to answer as fast and as accurately as you can!
        Press SPACE to practice!
    KeyboardComponent practResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent intro_img_2
      image = stim/lincon.png
      pos = (-.3, .2)
      startVal [time (s)] = 0.0
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    ImageComponent intro_img_22
      image = stim/rcon.png
      pos = (0.3, .2)
      startVal [time (s)] = 0.0
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    ImageComponent intro_bubs_2
      image = stim/bubbles.png
      pos = (0.25,-0.03)
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent endText
      color = black
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        You found all the fish!!






        Thanks for playing!
    KeyboardComponent endKey
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent flippy_fish
      image = stim/introFish.png
      ori [set every repeat] = 0
      pos = (0, .1)
      startVal [time (s)] = 0.0
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    CodeComponent fish_flipping
      Code Type = Auto->JS
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      Each Frame:
        flippy_fish.ori += 1
  Routine Rest
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    TextComponent rest
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Good job on this round!

        Take a quick break.
    KeyboardComponent restResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
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    CodeComponent jitterFixCross
      Code Type = Both
      Begin Experiment:
        fixDuration  = .4
      Begin JS Experiment:
        fixDuration = 0.4;
      Begin JS Routine:
        durations = [1.0, 1.1, 1.2, 1.3, 1.4, 1.5, 1.6, 1.7, 1.8, 1.9, 2.0];
        util.shuffle(durations);
        fixDuration = durations[0];
      Begin Routine:
        durations = [1.0, 1.1, 1.2, 1.3, 1.4, 1.5, 1.6, 1.7, 1.8, 1.9, 2.0]  # Create durations
        shuffle(durations)  # Randomize durations
        fixDuration  = durations[0] # Take one of the randomized durations
      End JS Routine:
        psychoJS.experiment.addData("fixDuration", fixDuration);
      End Routine:
        thisExp.addData("fixDuration", fixDuration)
    ImageComponent image
      image = stim/fix.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
      units = pix
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Flow
  Routine PracInstruc
  Routine PracInstruct2
  LoopInitiator pracLoop loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = ant_conds.csv
    loopType = random
    nReps = 1
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    Routine fixation
    Routine trial
    Routine feedback
  LoopTerminator pracLoop
  Routine MainInstruc
  LoopInitiator blockLoop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator mainLoop loopType="TrialHandler"
      conditionsFile = ant_conds.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cue', 'upper'), ('cond', 'con'), ('target', 'l'), ('corrAns', 'left'), ('cueFile', 'stim/upper.png'), ('targetFile', 'stim/lcon.png')]),
        OrderedDict([('cue', 'upper'), ('cond', 'con'), ('target', 'r'), ('corrAns', 'right'), ('cueFile', 'stim/upper.png'), ('targetFile', 'stim/rcon.png')]),
        OrderedDict([('cue', 'upper'), ('cond', 'incon'), ('target', 'l'), ('corrAns', 'left'), ('cueFile', 'stim/upper.png'), ('targetFile', 'stim/lincon.png')]),
        OrderedDict([('cue', 'upper'), ('cond', 'incon'), ('target', 'r'), ('corrAns', 'right'), ('cueFile', 'stim/upper.png'), ('targetFile', 'stim/rincon.png')]),
        OrderedDict([('cue', 'upper'), ('cond', 'neut'), ('target', 'l'), ('corrAns', 'left'), ('cueFile', 'stim/upper.png'), ('targetFile', 'stim/lneut.png')]),
        OrderedDict([('cue', 'upper'), ('cond', 'neut'), ('target', 'r'), ('corrAns', 'right'), ('cueFile', 'stim/upper.png'), ('targetFile', 'stim/rneut.png')]),
        OrderedDict([('cue', 'lower'), ('cond', 'con'), ('target', 'l'), ('corrAns', 'left'), ('cueFile', 'stim/lower.png'), ('targetFile', 'stim/lcon.png')]),
        OrderedDict([('cue', 'lower'), ('cond', 'con'), ('target', 'r'), ('corrAns', 'right'), ('cueFile', 'stim/lower.png'), ('targetFile', 'stim/rcon.png')]),
        OrderedDict([('cue', 'lower'), ('cond', 'incon'), ('target', 'l'), ('corrAns', 'left'), ('cueFile', 'stim/lower.png'), ('targetFile', 'stim/lincon.png')])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
      Routine fixation
      Routine trial
    LoopTerminator mainLoop
    Routine Rest
  LoopTerminator blockLoop
  Routine End
