PsychoPy2experiment version="2024.2.2"
Settings
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['Participant'], expInfo['Timepoint'], expInfo['Session'], expName, expInfo['date'])
  Experiment info = {'Participant': '', 'Timepoint': '', 'Session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 3.2.3
  Window size (pixels) = [1024, 768]
  color = $[-0.608,-0.608,-0.608]
  expName = DotsGame_22Nov19
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Prac
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    PolygonComponent pracITI
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent pracLeft
      image [set during: Prac.pracStatic] = $ImageLeft
      pos = (-.28, 0)
      size = (.37, .37)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    ImageComponent pracRight
      image [set during: Prac.pracStatic] = $ImageRight
      pos = (.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent pracResp
      allowedKeys = 'insert','return'
      correctAns = $CorrectAnswer
      forceEndRoutine = True
      startEstim = 2
      startVal [condition] = pracLeft.status==STARTED
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    StaticComponent pracStatic
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine PracFeedback
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    CodeComponent setFeedback
      Code Type = Py
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      Begin Experiment:
        # feedback variables just need some values at start
        feedbackImg=''
        feedbackMsg=''
        pracCorr=[] # holding array for accuracy (1 or 0)
        #minNrPractice = 10  # min number of trials to practice
        #minAccuracy = 0.5 # criterion: 5/10
      Begin Routine:
        if pracResp.keys: # if the list isn't empty (i.e., a button was pressed)
            if pracResp.corr:
                feedbackMsg = "Correct!"
                feedbackImg = "DotsGame_images/check_mark.png"
            elif pracResp.corr == 0:
                feedbackMsg = "Wrong..."
                feedbackImg = "DotsGame_images/x_mark.png"
        else:
            feedbackMsg = "Remember to press a button..."
            feedbackImg = "DotsGame_images/x_mark.png"

        # track all prac trials
        pracCorr.append(pracResp.corr)
      End Routine:
        if len(pracCorr) >= minNrPractice:
            nCorr=sum(pracCorr[:])
            nResps=len(pracCorr[:])
            accuracy = nCorr/nResps

            if accuracy > minAccuracy:
                trials_Prac.finished = True
    ImageComponent feedbackImage
      image [set every repeat] = $feedbackImg
      size = (.2, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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    TextComponent feedbackText
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackMsg
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  Routine Instruct
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    TextComponent gameName
      color = $[0.804,0.804,0.804]
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = The Dots Game
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    TextComponent gameInstruct
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        This game is about choosing the side with more dots.
        Use your thumb to press YELLOW for left or BLUE for right.
    ImageComponent gameExample
      image = DotsGame_images/instruction_example_dots.png
      size = (0.6457, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent hand_left
      image = DotsGame_images/hand_left.png
      interpolate = nearest
      pos = (-.4, -.2)
      size = (.188, .3)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent button_yellow
      image = DotsGame_images/yellow_left_0.png
      pos = (-.25, -.15)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent hand_right
      image = DotsGame_images/hand_right.png
      interpolate = nearest
      pos = (.4, -.2)
      size = (.188, .3)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent button_blue
      image = DotsGame_images/blue_right_ENTER.png
      pos = (.25, -.15)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent check_mark
      image = DotsGame_images/check_mark.png
      pos = (.25, -.085)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructProceed
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, -.37)
      startVal [time (s)] = 0.0
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      text:
        First we are going to do some practice.
        Ready? (SPACE to continue)
    KeyboardComponent instructReady
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PrePrac1
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    PolygonComponent prepracFix1
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracLeft1
      image = DotsGame_images/3_437_1.bmp
      pos = (-.28, 0)
      size = (.37, .37)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracRight1
      image = DotsGame_images/3_438_2.bmp
      pos = (.28, 0)
      size = (.37, .37)
      startVal [time (s)] = 0
      units = height
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    TextComponent prepracInstruct1
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        Which side has more?
        Which button would you press?
    KeyboardComponent prepracResp1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine PrePrac2
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    PolygonComponent prepracFix2
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracLeft2
      image = DotsGame_images/1_145_1.bmp
      pos = (-.28, 0)
      size = (.37, .37)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracRight2
      image = DotsGame_images/1_146_2.bmp
      pos = (.28, 0)
      size = (.37, .37)
      startVal [time (s)] = 0
      units = height
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    TextComponent prepracInstruct2
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        Which side has more?
        Which button would you press?
    KeyboardComponent prepracResp2
      allowedKeys = 'insert'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine PrePracEnd
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    TextComponent prepracEnd
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You got it!
        Now we will do some more practice.
        Press a button as soon as you know the answer.

        Ready?
        (SPACE to continue)
    KeyboardComponent prepracEndResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine Blank
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    TextComponent blankReady
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent resetTrackCode
      Code Type = Py
      Begin Routine:
        # reset the performance variables
        corr =[]
        TaskFeedback=''
        ACC=''
  Routine Fix
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    PolygonComponent fix1
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
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  Routine PracEnd
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    PolygonComponent pracITIEnd
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    TextComponent pracEnd
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      startEstim = 2
      startVal [condition] = pracITIEnd.status==FINISHED
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      text:
        Great job!
        Now we are going to do some more, but this time you won't get feedback.
        Press the YELLOW button or BLUE button as soon as you know the answer.

        Ready?
        (Press SPACE to continue)
    KeyboardComponent pracEndClear
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 2
      startVal [condition] = pracITIEnd.status==FINISHED
      store = nothing
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  Routine Test
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    PolygonComponent testITI
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent testLeft
      image [set during: Test.testStatic] = $ImageLeft
      pos = (-.28, 0)
      size = (.37, .37)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    ImageComponent testRight
      image [set during: Test.testStatic] = $ImageRight
      pos = (.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent testResp
      allowedKeys = 'insert','return'
      correctAns = $CorrectAnswer
      forceEndRoutine = True
      startEstim = 2
      startVal [condition] = testLeft.status==STARTED
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    StaticComponent testStatic
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine trlTrack
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    CodeComponent trlTrackCode
      Code Type = Py
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      Begin Experiment:
        # variable just needs some value at start
        corr =[]
      Begin Routine:
        # add to object "corr"
        corr.append(testResp.corr)
  Routine TaskFeedback
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    CodeComponent setTaskFeedback
      Code Type = Py
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      Begin Experiment:
        # variable just needs some value at start
        TaskFeedback=''
        ACC=''
      Begin Routine:
        # tabulate accuracy of all test trials
        nCorr=sum(corr[:])
        nResps=len(corr[:])
        TaskFeedback="{} / {}".format(nCorr, nResps)
        ACC=nCorr/nResps
    TextComponent blockBreak
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You are doing awesome!
        Let's take a short break...

        (Press SPACE to continue)
    TextComponent TaskFeedbackText
      color = $[0.804,0.804,0.804]
      letterHeight = 0.02
      pos = (.45, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TaskFeedback
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    KeyboardComponent breakEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0
      store = nothing
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  Routine End
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    CodeComponent setTaskFeedback2
      Code Type = Py
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      Begin Routine:
        # tabulate accuracy of all test trials
        nCorr=sum(corr[:])
        nResps=len(corr[:])
        TaskFeedback="{} / {}".format(nCorr, nResps)
        ACC=nCorr/nResps
    TextComponent TaskFeedbackText2
      color = $[0.804,0.804,0.804]
      letterHeight = 0.02
      pos = (.45, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $TaskFeedback
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    TextComponent endInstr
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

          DONE!
Flow
  Routine Instruct
  Routine PrePrac1
  Routine PrePrac2
  Routine PrePracEnd
  Routine Blank
  Routine Fix
  LoopInitiator trials_Prac loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = DotsGame_Prac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Run', 'prac'), ('Ratio', 0.333), ('Condition', 'SmallRatio'), ('Congruency', 0), ('CondCong', 'Sm_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 7), ('NumberR', 21), ('ImageLeft', 'DotsGame_images/4_504_2_flip.bmp'), ('ImageRight', 'DotsGame_images/4_503_1_flip.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 0), ('density', 0), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 1), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 54861), ('density1', 17.635), ('t_s_area1', 3111.0), ('ave_diam1', 23.0), ('t_circ1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,
      OrderedDict([('Run', 'prac'), ('Ratio', 0.714), ('Condition', 'LargeRatio'), ('Congruency', 0), ('CondCong', 'Lg_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 15), ('NumberR', 21), ('ImageLeft', 'DotsGame_images/2_277_1.bmp'), ('ImageRight', 'DotsGame_images/2_278_2.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 0), ('density', 1), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 0), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 60970), ('density1', 13.967), ('t_s_area1', 4365.2), ('ave_diam1', 18.667), ('t_circ1', 879.6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,
      OrderedDict([('Run', 'prac'), ('Ratio', 0.625), ('Condition', 'LargeRatio'), ('Congruency', 1), ('CondCong', 'Lg_Cong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 8), ('NumberR', 5), ('ImageLeft', 'DotsGame_images/1_127_1.bmp'), ('ImageRight', 'DotsGame_images/1_128_2.bmp'), ('CorrectSide', 'left'), ('CorrectAnswer', 'insert'), ('area_sub', 1), ('density', 0), ('t_s_area', 1), ('ave_diam', 1), ('t_circ', 1), ('CON1', 1), ('CON2', 1), ('INC1', 0), ('INC2', 0), ('BOTH', 1), ('area_sub1', 31399), ('density1', 5.6252), ('t_s_area1', 5581.8), ('ave_diam1', 29.625), ('t_circ1', 744.56), (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,
      OrderedDict([('Run', 'prac'), ('Ratio', 0.286), ('Condition', 'SmallRatio'), ('Congruency', 0), ('CondCong', 'Sm_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 6), ('NumberR', 21), ('ImageLeft', 'DotsGame_images/4_607_1.bmp'), ('ImageRight', 'DotsGame_images/4_608_2.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 0), ('density', 1), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 1), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 49922), ('density1', 17.306), ('t_s_area1', 2884.8), ('ave_diam1', 24.167), ('t_circ1', 455.53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
    Routine Prac
    Routine PracFeedback
  LoopTerminator trials_Prac
  Routine PracEnd
  Routine Blank
  Routine Fix
  LoopInitiator trials_Test1 loopType="TrialHandler"
    conditionsFile = DotsGame_Block1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Run', 'test1'), ('Ratio', 0.333), ('Condition', 'SmallRatio'), ('Congruency', 1), ('CondCong', 'Sm_Cong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 5), ('NumberR', 15), ('ImageLeft', 'DotsGame_images/2_193_1.bmp'), ('ImageRight', 'DotsGame_images/2_194_2.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 1), ('density', 0), ('t_s_area', 1), ('ave_diam', 1), ('t_circ', 1), ('CON1', 1), ('CON2', 1), ('INC1', 0), ('INC2', 0), ('BOTH', 1), ('area_sub1', 35880), ('density1', 65.076), ('t_s_area1', 551.35), ('ave_diam1', 11.6), ('t_circ1', 182.21),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,
      OrderedDict([('Run', 'test1'), ('Ratio', 0.333), ('Condition', 'SmallRatio'), ('Congruency', 0), ('CondCong', 'Sm_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 18), ('NumberR', 6), ('ImageLeft', 'DotsGame_images/4_537_1_flip.bmp'), ('ImageRight', 'DotsGame_images/4_538_2_flip.bmp'), ('CorrectSide', 'left'), ('CorrectAnswer', 'insert'), ('area_sub', 0), ('density', 0), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 1), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 48279), ('density1', 18.594), ('t_s_area1', 2596.5), ('ave_diam1', 12.889), ('t_circ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,
      OrderedDict([('Run', 'test1'), ('Ratio', 0.667), ('Condition', 'LargeRatio'), ('Congruency', 1), ('CondCong', 'Lg_Cong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 12), ('NumberR', 18), ('ImageLeft', 'DotsGame_images/2_215_1.bmp'), ('ImageRight', 'DotsGame_images/2_216_2.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 1), ('density', 0), ('t_s_area', 1), ('ave_diam', 1), ('t_circ', 1), ('CON1', 1), ('CON2', 1), ('INC1', 0), ('INC2', 0), ('BOTH', 1), ('area_sub1', 37204), ('density1', 27.053), ('t_s_area1', 1375.2), ('ave_diam1', 11.25), ('t_circ1', 424.12)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,
      OrderedDict([('Run', 'test1'), ('Ratio', 0.667), ('Condition', 'LargeRatio'), ('Congruency', 0), ('CondCong', 'Lg_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 9), ('NumberR', 6), ('ImageLeft', 'DotsGame_images/4_565_1.bmp'), ('ImageRight', 'DotsGame_images/4_566_2.bmp'), ('CorrectSide', 'left'), ('CorrectAnswer', 'insert'), ('area_sub', 0), ('density', 1), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 0), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 30789), ('density1', 29.19), ('t_s_area1', 1054.8), ('ave_diam1', 11.667), ('t_circ1', 329.87),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
    Routine Test
    Routine trlTrack
  LoopTerminator trials_Test1
  Routine TaskFeedback
  Routine Blank
  Routine Fix
  LoopInitiator trials_Test2 loopType="TrialHandler"
    conditionsFile = DotsGame_Block2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Run', 'test2'), ('Ratio', 0.667), ('Condition', 'LargeRatio'), ('Congruency', 0), ('CondCong', 'Lg_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 18), ('NumberR', 12), ('ImageLeft', 'DotsGame_images/1_117_1.bmp'), ('ImageRight', 'DotsGame_images/1_118_2.bmp'), ('CorrectSide', 'left'), ('CorrectAnswer', 'insert'), ('area_sub', 0), ('density', 1), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 0), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 43114), ('density1', 16.59), ('t_s_area1', 2598.9), ('ave_diam1', 12.833), ('t_circ1', 725.7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,
      OrderedDict([('Run', 'test2'), ('Ratio', 0.286), ('Condition', 'SmallRatio'), ('Congruency', 1), ('CondCong', 'Sm_Cong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 21), ('NumberR', 6), ('ImageLeft', 'DotsGame_images/4_519_1.bmp'), ('ImageRight', 'DotsGame_images/4_520_2.bmp'), ('CorrectSide', 'left'), ('CorrectAnswer', 'insert'), ('area_sub', 1), ('density', 0), ('t_s_area', 1), ('ave_diam', 1), ('t_circ', 1), ('CON1', 1), ('CON2', 1), ('INC1', 0), ('INC2', 0), ('BOTH', 1), ('area_sub1', 49679), ('density1', 3.5736), ('t_s_area1', 13902.0), ('ave_diam1', 28.667), ('t_circ1', 1891.2)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,
      OrderedDict([('Run', 'test2'), ('Ratio', 0.333), ('Condition', 'SmallRatio'), ('Congruency', 0), ('CondCong', 'Sm_Incong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 6), ('NumberR', 18), ('ImageLeft', 'DotsGame_images/3_437_1.bmp'), ('ImageRight', 'DotsGame_images/3_438_2.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 0), ('density', 0), ('t_s_area', 0), ('ave_diam', 0), ('t_circ', 1), ('CON1', 0), ('CON2', 0), ('INC1', 1), ('INC2', 1), ('BOTH', 1), ('area_sub1', 59336), ('density1', 18.517), ('t_s_area1', 3204.4), ('ave_diam1', 25.667), ('t_circ1', 483.8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,
      OrderedDict([('Run', 'test2'), ('Ratio', 0.667), ('Condition', 'LargeRatio'), ('Congruency', 1), ('CondCong', 'Lg_Cong'), ('PresentationDuration', 2), ('ITI', 2), ('NumberL', 12), ('NumberR', 18), ('ImageLeft', 'DotsGame_images/5_773_1.bmp'), ('ImageRight', 'DotsGame_images/5_774_2.bmp'), ('CorrectSide', 'right'), ('CorrectAnswer', 'return'), ('area_sub', 1), ('density', 0), ('t_s_area', 1), ('ave_diam', 1), ('t_circ', 1), ('CON1', 1), ('CON2', 1), ('INC1', 0), ('INC2', 0), ('BOTH', 1), ('area_sub1', 51137), ('density1', 34.341), ('t_s_area1', 1489.1), ('ave_diam1', 12.0), ('t_circ1', 452.39),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
    Routine Test
    Routine trlTrack
  LoopTerminator trials_Test2
  Routine End
