PsychoPy2experiment version="2024.2.2"
Settings
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['Participant'], expInfo['Timepoint'], expInfo['Session'], expName, expInfo['date'])
  Experiment info = {'Participant': '', 'Timepoint': '', 'Session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 3.2.3
  Window size (pixels) = [1920, 1080]
  color = $[-0.608,-0.608,-0.608]
  expName = NumberGame_v09302020
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Prac
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    PolygonComponent pracITI
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent pracLeft
      image [set during: Prac.pracStatic] = $ImageLeft
      pos = (-.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    ImageComponent pracRight
      image [set during: Prac.pracStatic] = $ImageRight
      pos = (.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent pracResp
      allowedKeys = 'insert','return'
      correctAns = $CorrectAnswer
      forceEndRoutine = True
      startEstim = 2
      startVal [condition] = pracLeft.status==STARTED
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    StaticComponent pracStatic
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine PracFeedback
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    CodeComponent setFeedback
      Code Type = Py
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      Begin Experiment:
        # feedback variables just need some values at start
        feedbackImg=''
        feedbackMsg=''
        pracCorr=[] # holding array for accuracy (1 or 0)
        #minNrPractice = 10  # min number of trials to practice
        #minAccuracy = 0.5 # criterion: 5/10
      Begin Routine:
        if pracResp.keys: # if the list isn't empty (i.e., a button was pressed)
            if pracResp.corr:
                feedbackMsg = "Correct!"
                feedbackImg = "NumberGame_images/check_mark.png"
            elif pracResp.corr == 0:
                feedbackMsg = "Wrong..."
                feedbackImg = "NumberGame_images/x_mark.png"
        else:
            feedbackMsg = "Remember to press a button..."
            feedbackImg = "NumberGame_images/x_mark.png"

        # track all prac trials
        pracCorr.append(pracResp.corr)
      End Routine:
        #if len(pracCorr) >= minNrPractice:
        #    nCorr=sum(pracCorr[:])
        #    nResps=len(pracCorr[:])
        #    accuracy = nCorr/nResps

        #    if accuracy > minAccuracy:
        #        trials_Prac.finished = True
        #
    ImageComponent feedbackImage
      image [set every repeat] = $feedbackImg
      size = (.2, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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    TextComponent feedbackText
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackMsg
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  Routine Instruct
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    TextComponent gameName
      color = $[0.804,0.804,0.804]
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = The Number Game
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    TextComponent gameInstruct
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        This game is about choosing the number that means more.
        Use your thumb to press YELLOW for left or BLUE for right.
    ImageComponent gameExample
      image = NumberGame_images/instruction_example.png
      size = (0.565, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent hand_left
      image = NumberGame_images/hand_left.png
      interpolate = nearest
      pos = (-.4, -.2)
      size = (.188, .3)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent button_yellow
      image = NumberGame_images/yellow_left_0.png
      pos = (-.25, -.15)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent hand_right
      image = NumberGame_images/hand_right.png
      interpolate = nearest
      pos = (.4, -.2)
      size = (.188, .3)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent button_blue
      image = NumberGame_images/blue_right_ENTER.png
      pos = (.25, -.15)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent check_mark
      image = NumberGame_images/check_mark.png
      pos = (-.25, -.085)
      size = (.05, .05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructProceed
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, -.37)
      startVal [time (s)] = 0.0
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      text:
        First we are going to do some practice.
        Ready? (SPACE to continue)
    KeyboardComponent instructReady
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PrePrac1
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    PolygonComponent prepracFix1
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracLeft1
      image = NumberGame_images/1_Arial.bmp
      pos = (-.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracRight1
      image = NumberGame_images/5_Arial.bmp
      pos = (.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 0
      units = height
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    TextComponent prepracInstruct1
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        Which one means more?
        Which button would you press?
    KeyboardComponent prepracResp1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine PrePrac2
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    PolygonComponent prepracFix2
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracLeft2
      image = NumberGame_images/6_Arial.bmp
      pos = (-.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 0
      units = height
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    ImageComponent prepracRight2
      image = NumberGame_images/4_Arial.bmp
      pos = (.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 0
      units = height
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    TextComponent prepracInstruct2
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        Which one means more?
        Which button would you press?
    KeyboardComponent prepracResp2
      allowedKeys = 'insert'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine PrePracEnd
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    TextComponent prepracEnd
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You got it!
        Now we will do some more practice.
        Press a button as soon as you know the answer.

        Ready?
        (SPACE to continue)
    KeyboardComponent prepracEndResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine Blank
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    TextComponent blankReady
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent resetTrackCode
      Code Type = Py
      Begin Routine:
        # reset the performance variables
        corr =[]
        TaskFeedback=''
        ACC=''
  Routine Fix
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    PolygonComponent fix1
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
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  Routine PracEnd
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    PolygonComponent pracITIEnd
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    TextComponent pracEnd
      color = $[0.804,0.804,0.804]
      letterHeight = 0.03
      startEstim = 2
      startVal [condition] = pracITIEnd.status==FINISHED
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      text:
        Great job!
        Now we are going to do some more, but this time you won't get feedback.
        Press the YELLOW button or BLUE button as soon as you know the answer.

        Ready?
        (Press SPACE to continue)
    KeyboardComponent pracEndClear
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 2
      startVal [condition] = pracITIEnd.status==FINISHED
      store = nothing
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  Routine Test
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    PolygonComponent testITI
      fillColor = $[1,1,1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 4
      ori = 90
      shape = line
      size = (.7,.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent testLeft
      image [set during: Test.testStatic] = $ImageLeft
      pos = (-.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    ImageComponent testRight
      image [set during: Test.testStatic] = $ImageRight
      pos = (.28, 0)
      size = (.35, .35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent testResp
      allowedKeys = 'insert','return'
      correctAns = $CorrectAnswer
      forceEndRoutine = True
      startEstim = 2
      startVal [condition] = testLeft.status==STARTED
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    StaticComponent testStatic
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine trlTrack
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    CodeComponent trlTrackCode
      Code Type = Py
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      Begin Experiment:
        # variable just needs some value at start
        corr =[]
      Begin Routine:
        # add to object "corr"
        corr.append(testResp.corr)
  Routine TaskFeedback
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    CodeComponent setTaskFeedback
      Code Type = Py
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      Begin Experiment:
        # variable just needs some value at start
        TaskFeedback=''
        ACC=''
      Begin Routine:
        # tabulate accuracy of all test trials
        nCorr=sum(corr[:])
        nResps=len(corr[:])
        TaskFeedback="{} / {}".format(nCorr, nResps)
        ACC=nCorr/nResps
    TextComponent blockBreak
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You are doing awesome!
        Let's take a short break...

        (Press SPACE to continue)
    TextComponent TaskFeedbackText
      color = $[0.804,0.804,0.804]
      letterHeight = 0.02
      pos = (.45, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TaskFeedback
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    KeyboardComponent breakEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0
      store = nothing
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  Routine End
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    CodeComponent setTaskFeedback2
      Code Type = Py
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      Begin Routine:
        # tabulate accuracy of all test trials
        nCorr=sum(corr[:])
        nResps=len(corr[:])
        TaskFeedback="{} / {}".format(nCorr, nResps)
        ACC=nCorr/nResps
    TextComponent TaskFeedbackText2
      color = $[0.804,0.804,0.804]
      letterHeight = 0.02
      pos = (.45, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $TaskFeedback
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    TextComponent endInstr
      color = $[0.804,0.804,0.804]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

          DONE!
Flow
  Routine Instruct
  Routine PrePrac1
  Routine PrePrac2
  Routine PrePracEnd
  Routine Blank
  Routine Fix
  LoopInitiator trials_Prac loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = NumberGame_Prac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Run', 'prac'), ('StimLeft', 3), ('StimRight', 4), ('Ratio', 0.75), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'return'), ('Distance', 1), ('ImageLeft', 'NumberGame_images/3_Arial.bmp'), ('ImageRight', 'NumberGame_images/4_Arial.bmp'), ('CorrectSide', 'right'), ('ITI', 2)]),
      OrderedDict([('Run', 'prac'), ('StimLeft', 8), ('StimRight', 6), ('Ratio', 0.75), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'insert'), ('Distance', 2), ('ImageLeft', 'NumberGame_images/8_Arial.bmp'), ('ImageRight', 'NumberGame_images/6_Arial.bmp'), ('CorrectSide', 'left'), ('ITI', 2)]),
      OrderedDict([('Run', 'prac'), ('StimLeft', 4), ('StimRight', 5), ('Ratio', 0.8), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'return'), ('Distance', 1), ('ImageLeft', 'NumberGame_images/4_Arial.bmp'), ('ImageRight', 'NumberGame_images/5_Arial.bmp'), ('CorrectSide', 'right'), ('ITI', 2)]),
      OrderedDict([('Run', 'prac'), ('StimLeft', 9), ('StimRight', 2), ('Ratio', 0.222222222), ('PresentationDuration', 2), ('Condition', 'SmallRatio'), ('CorrectAnswer', 'insert'), ('Distance', 7), ('ImageLeft', 'NumberGame_images/9_Arial.bmp'), ('ImageRight', 'NumberGame_images/2_Arial.bmp'), ('CorrectSide', 'left'), ('ITI', 2)])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
    Routine Prac
    Routine PracFeedback
  LoopTerminator trials_Prac
  Routine PracEnd
  Routine Blank
  Routine Fix
  LoopInitiator trials_Test1 loopType="TrialHandler"
    conditionsFile = NumberGame_Block1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Run', 'test1'), ('StimLeft', 1), ('StimRight', 5), ('Ratio', 0.2), ('PresentationDuration', 2), ('Condition', 'SmallRatio'), ('CorrectAnswer', 'return'), ('Distance', 4), ('ImageLeft', 'NumberGame_images/1_Arial.bmp'), ('ImageRight', 'NumberGame_images/5_Arial.bmp'), ('CorrectSide', 'right'), ('ITI', 2)]),
      OrderedDict([('Run', 'test1'), ('StimLeft', 6), ('StimRight', 1), ('Ratio', 0.166666667), ('PresentationDuration', 2), ('Condition', 'SmallRatio'), ('CorrectAnswer', 'insert'), ('Distance', 5), ('ImageLeft', 'NumberGame_images/6_Arial.bmp'), ('ImageRight', 'NumberGame_images/1_Arial.bmp'), ('CorrectSide', 'left'), ('ITI', 2)]),
      OrderedDict([('Run', 'test1'), ('StimLeft', 7), ('StimRight', 9), ('Ratio', 0.777777778), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'return'), ('Distance', 2), ('ImageLeft', 'NumberGame_images/7_Arial.bmp'), ('ImageRight', 'NumberGame_images/9_Arial.bmp'), ('CorrectSide', 'right'), ('ITI', 2)]),
      OrderedDict([('Run', 'test1'), ('StimLeft', 5), ('StimRight', 7), ('Ratio', 0.714285714), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'return'), ('Distance', 2), ('ImageLeft', 'NumberGame_images/5_Arial.bmp'), ('ImageRight', 'NumberGame_images/7_Arial.bmp'), ('CorrectSide', 'right'), ('ITI', 2)])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
    Routine Test
    Routine trlTrack
  LoopTerminator trials_Test1
  Routine TaskFeedback
  Routine Blank
  Routine Fix
  LoopInitiator trials_Test2 loopType="TrialHandler"
    conditionsFile = NumberGame_Block2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Run', 'test2'), ('StimLeft', 6), ('StimRight', 4), ('Ratio', 0.666666667), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'insert'), ('Distance', 2), ('ImageLeft', 'NumberGame_images/6_Arial.bmp'), ('ImageRight', 'NumberGame_images/4_Arial.bmp'), ('CorrectSide', 'left'), ('ITI', 2)]),
      OrderedDict([('Run', 'test2'), ('StimLeft', 8), ('StimRight', 6), ('Ratio', 0.75), ('PresentationDuration', 2), ('Condition', 'LargeRatio'), ('CorrectAnswer', 'insert'), ('Distance', 2), ('ImageLeft', 'NumberGame_images/8_Arial.bmp'), ('ImageRight', 'NumberGame_images/6_Arial.bmp'), ('CorrectSide', 'left'), ('ITI', 2)]),
      OrderedDict([('Run', 'test2'), ('StimLeft', 1), ('StimRight', 5), ('Ratio', 0.2), ('PresentationDuration', 2), ('Condition', 'SmallRatio'), ('CorrectAnswer', 'return'), ('Distance', 4), ('ImageLeft', 'NumberGame_images/1_Arial.bmp'), ('ImageRight', 'NumberGame_images/5_Arial.bmp'), ('CorrectSide', 'right'), ('ITI', 2)]),
      OrderedDict([('Run', 'test2'), ('StimLeft', 7), ('StimRight', 2), ('Ratio', 0.285714286), ('PresentationDuration', 2), ('Condition', 'SmallRatio'), ('CorrectAnswer', 'insert'), ('Distance', 5), ('ImageLeft', 'NumberGame_images/7_Arial.bmp'), ('ImageRight', 'NumberGame_images/2_Arial.bmp'), ('CorrectSide', 'left'), ('ITI', 2)])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
    Routine Test
    Routine trlTrack
  LoopTerminator trials_Test2
  Routine End
